---
API: 2.1
OpenSesame: 3.2.4
Platform: nt
---
set width 1680
set uniform_coordinates yes
set title Mapping
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 44100
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1050
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\labuser\\Desktop\\Local Experiments\\Sahil\\TalkerTeam"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background black

define loop A_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run A_sequence

define sequence A_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blocked_male_loop always
	run blocked_female_loop always
	run mixed_loop always

define sampler Audio1
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe1]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio10
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe10]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio11
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe11]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio12
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe12]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio13
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe13]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio14
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe14]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio15
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe15]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio16
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe16]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio2
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe2]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio3
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe3]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio4
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe4]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio5
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe5]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio6
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe6]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio7
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe7]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio8
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe8]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler Audio9
	set volume 1
	set stop_after 0
	set sample "[AuditoryProbe9]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define loop B_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run B_sequence

define sequence B_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blocked_female_loop always
	run blocked_male_loop always
	run mixed_loop always

define loop C_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run C_sequence

define sequence C_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mixed_loop always
	run blocked_male_loop always
	run blocked_female_loop always

define loop D_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run D_sequence

define sequence D_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mixed_loop always
	run blocked_female_loop always
	run blocked_male_loop always

define sketchpad blank
	set duration 250
	set description "Displays stimuli"

define loop blocked_female_loop
	set source_file "[subject_nr]blockedfemale.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run experiment_sequence

define loop blocked_male_loop
	set source_file "[subject_nr]blockedmale.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run experiment_sequence

define sketchpad break
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Please take a break. Press G when you are ready to continue." x=0 y=-32 z_index=0

define sketchpad break2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Please take a short break. Press G when you are ready to continue." x=0 y=-32 z_index=0

define sketchpad break3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Please take a short break. Press G when you are ready to continue." x=0 y=-32 z_index=0

define form_multiple_choice choose_counterbalancing
	set timeout infinite
	set spacing 10
	set question "Which version do you want to run?"
	__options__
	A
	B
	C
	D
	__end__
	set margins "50;50;50;50"
	set form_var cb
	set form_title Version
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define inline_script current_audio_file_1
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe1)"

define inline_script current_audio_file_10
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe10)"

define inline_script current_audio_file_11
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe11)"

define inline_script current_audio_file_12
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe12)"

define inline_script current_audio_file_13
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe13)"

define inline_script current_audio_file_14
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe14)"

define inline_script current_audio_file_15
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe15)"

define inline_script current_audio_file_16
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe16)"

define inline_script current_audio_file_2
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe2)"

define inline_script current_audio_file_3
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe3)"

define inline_script current_audio_file_4
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe4)"

define inline_script current_audio_file_5
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe5)"

define inline_script current_audio_file_6
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe6)"

define inline_script current_audio_file_7
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe7)"

define inline_script current_audio_file_8
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe8)"

define inline_script current_audio_file_9
	set description "Executes Python code"
	set _run ""
	set _prepare "exp.set('current_stimulus',var.AuditoryProbe9)"

define sketchpad debrief
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="You have completed the experiment.<br /><br /><br />In this study, you sometimes heard multiple talkers while you were listening for the target word, and you sometimes heard just one talker. Research using this word monitoring paradigm has shown that target detection is slowed by the presence of multiple talkers. <br /><br />We are interested in understanding whether this happens because<br /> <br />(a) a change in who is talking forces the listener to  'recalibrate' how they interpret the acoustic signal (since everyone produces their speech sounds differently),<br /><br />or because<br /><br />(b) other aspects of the paradigm (which items serve as targets/distractors, whether one or both of the talkers says the target item within a trial) might make some trials more cognitively challenging than others.<br /><br /><br />We are manipulating various aspects of the paradigm in order to determine the conditions under which target detection is slowed by hearing multiple talkers.<br /><br /><br />Thank you for your participation! Please press the SPACEBAR to exit." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run choose_counterbalancing always
	run welcome always
	run main_loop always
	run debrief always

define sequence experiment_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run blank always
	run first_target always
	run stim1 always
	run stim2 always
	run stim3 always
	run stim4 always
	run stim5 always
	run stim6 always
	run stim7 always
	run stim8 always
	run stim9 always
	run stim10 always
	run stim11 always
	run stim12 always
	run stim13 always
	run stim14 always
	run stim15 always
	run stim16 always
	run break "=(var.count_experiment_sequence+1) % 24 == 0"

define sketchpad first_target
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="[Target]" x=0 y=0 z_index=0

define sketchpad fixation
	set duration 1000
	set description "Displays stimuli"
	draw line color=white penwidth=6 show_if=always x1=0 x2=0 y1=-32 y2=32 z_index=0
	draw line color=white penwidth=6 show_if=always x1=-32 x2=32 y1=0 y2=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log current_stimulus
	log Trial
	log Condition
	log Talker
	log Target
	log subject_nr
	log title
	log response_time_response
	log response_response
	log time_response
	log time_Audio1
	log time_Audio2
	log time_Audio3
	log time_Audio4
	log time_Audio5
	log time_Audio6
	log time_Audio7
	log time_Audio8
	log time_Audio9
	log time_Audio10
	log time_Audio11
	log time_Audio12
	log time_Audio13
	log time_Audio14
	log time_Audio15
	log time_Audio16

define loop main_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run main_sequence

define sequence main_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run A_loop "=var.cb == \"A\""
	run B_loop "=var.cb == \"B\""
	run C_loop "=var.cb == \"C\""
	run D_loop "=var.cb == \"D\""

define loop mixed_loop
	set source_file "[subject_nr]mixed.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 display tile
	setcycle 0 AuditoryProbe1 "m150greet.wav"
	setcycle 0 AuditoryProbe2 "m150gnash.wav"
	setcycle 0 AuditoryProbe3 "m150tile.wav"
	setcycle 0 AuditoryProbe4 "m150jaw.wav"
	setcycle 1 display tile
	setcycle 1 AuditoryProbe1 "m150gnash.wav"
	setcycle 1 AuditoryProbe2 "m150knife.wav"
	setcycle 1 AuditoryProbe3 "m150tile.wav"
	setcycle 1 AuditoryProbe4 "m150jolt.wav"
	setcycle 2 display tile
	setcycle 2 AuditoryProbe1 "m150romp.wav"
	setcycle 2 AuditoryProbe2 "m150depth.wav"
	setcycle 2 AuditoryProbe3 "m150priest.wav"
	setcycle 2 AuditoryProbe4 "m150tile.wav"
	setcycle 3 display tile
	setcycle 3 AuditoryProbe1 "m150lash.wav"
	setcycle 3 AuditoryProbe2 "m150tile.wav"
	setcycle 3 AuditoryProbe3 "m150bluff.wav"
	setcycle 3 AuditoryProbe4 "m150cad.wav"
	run experiment_sequence

define keyboard_response response
	set timeout infinite
	set flush no
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define coroutines stim1
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio1 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_1 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim10
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio10 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_10 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim11
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio11 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_11 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim12
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio12 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_12 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim13
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio13 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_13 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim14
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio14 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_14 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim15
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio15 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_15 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim16
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio16 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_16 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim2
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio2 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_2 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim3
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio3 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_3 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim4
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio4 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_4 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim5
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio5 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_5 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim6
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio6 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_6 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim7
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio7 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_7 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim8
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio8 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_8 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define coroutines stim9
	set function_name ""
	set flush_keyboard no
	set end_after_item ""
	set duration 750
	set description "Run items simultaneously"
	run target_item end=0 runif=always start=0
	run Audio9 end=0 runif=always start=0
	run response end=750 runif=always start=0
	run current_audio_file_9 end=0 runif=always start=0
	run logger end=0 runif=always start=0

define sketchpad target_item
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="[Target]" x=0 y=0 z_index=0

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="At the start of each trial, a word will appear on the screen. You will then hear 16 words in a row. Press the SPACEBAR as quickly as possible when you hear the word that is displayed on the screen. You may hear the word multiple times per trial.<br /><br />You will be given three breaks during the experiment. They will occur approximately every six minutes. Instructions will appear on the screen once you reach the appropriate break times.<br /><br />Press the SPACEBAR to begin." x=0 y=0 z_index=0

